PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1366, 768]
  expName = solo project
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine welcome
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Some brands you know.
        Some colors you love.
        Let’s see how your mind connects the two.
        Press space to start
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this experiment, you’ll first rate how familiar you are with some brands and their logos


        Then, you’ll see different colors and simply type the first brand that comes to your mind.


        Trust your instincts — there are no right or wrong answers!
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine logo_routine
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    ImageComponent logoimage
      image [set every repeat] = $brandlogo
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    SliderComponent slider
      color = -1.0000, -1.0000, 1.0000
      font = Canva Sans
      forceEndRoutine = True
      granularity = 0
      labels = "familiar","unfamiliar"
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine colorlogo
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    ImageComponent image
      image [set every repeat] = $color
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    TextComponent text_2
      color = 0.9216, 0.9216, 0.7255
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Write the first brand that comes to your mind on seeing this colour 
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    TextboxComponent textbox
      anchor = bottom-center
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0,-0.5)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0,-0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text = Click to submit 
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    MouseComponent mouse
      clickable = text_4
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  Routine instructions
  LoopInitiator logoloop loopType="TrialHandler"
    conditionsFile = conditions.solo.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'brandlogo': 'images/district.png'},
      {'brandlogo': 'images/alibaba.png'},
      {'brandlogo': 'images/dropbox.png'},
      {'brandlogo': 'images/barbie.png'},
      {'brandlogo': 'images/hilton.jpg'},
      {'brandlogo': 'images/Starbucks.png'},
      {'brandlogo': 'images/nike.jpeg'},
      {'brandlogo': 'images/ups.png'},
      {'brandlogo': 'images/icici.jpeg'},
      {'brandlogo': 'images/motherdairy.png'},
      {'brandlogo': 'images/snapchat.jpeg'},
      {'brandlogo': 'images/coca cola.png'}]
    Routine logo_routine
  LoopTerminator logoloop
  LoopInitiator colorloop loopType="TrialHandler"
    conditionsFile = color.conditions.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'color': 'images1/pink'},
      {'color': 'images1/black'},
      {'color': 'images1/purple'},
      {'color': 'images1/green'},
      {'color': 'images1/light blue'},
      {'color': 'images1/orangered'},
      {'color': 'images1/red'},
      {'color': 'images1/yellow'},
      {'color': 'images1/blue'},
      {'color': 'images1/orange'},
      {'color': 'images1/blackgold'},
      {'color': 'images1/dark blue'}]
    Routine colorlogo
  LoopTerminator colorloop
